begintemplate ngfcell
public soma //, dend
public init //,topol


create soma, dend

//proc topol() {
//	connect dend(0), soma(0)
//}

proc init() {
	//topol()
	soma {
		Ra = 100 // does not matter for 1 compartment
		nseg = 1
		cm = 0.3  // **MODIFY**  

		// LEAK CHANNEL
		//insert pas
		//e_pas = -67 // **MODIFY**
		//g_pas = 0.0001 // **MODIFY** // 0.001 is default


		insert ch_leak
		gmax_ch_leak = 9.470825e-05 	//gleak
		e_ch_leak = -67
		
		// Ih for SAG 
		insert hd 
		gbar_hd = 0.0001	// **MODIFY**			//mho per cm2 //default value in mod file



		// Fast Na+ for Spiking 	//gNasoma
		//insert ch_Navngf
		//gmax_ch_Navngf=3.7860265
		//ena = 55


		// POTASSIUM CHANNELS //

		// Fast K+  	//kdrf 
		//insert ch_Kdrfastngf
		//gmax_ch_Kdrfastngf=0.15514516
		//ek = -90

		// Proximal A-type K+  	//gKvA
		//insert ch_KvAngf
		//gmax_ch_KvAngf = 0.00015 		// 5.2203905e-06 

		// Small K+ channel: calcium gated //gKCaS
		//insert ch_KCaS 					
		//gmax_ch_KCaS= 0.000002 			// 4.5152237e-07 

		// Big K+ channel: voltage & ca2+ gated 	//gKvCaB
		//insert ch_KvCaB
		//gmax_ch_KvCaB = 0.0000002 		// 1.0235317e-06



		// CALCIUM CHANNELS //

		// T-type Ca2+ // HAV-N- Ca channel 	//gCavN 
		//insert ch_CavN
		//gmax_ch_CavN = 0.0008 			//0.00058169587

		// L-type Ca2+ 	//gCavL
		//insert ch_CavL
		//gmax_ch_CavL= 0.005 			// 0.056108352 

		//insert iconc_Ca
		//catau_iconc_Ca = 10
		//caiinf_iconc_Ca = 5.e-6


		// DELETED OR REMOVED TEMPORARILY

		//insert ch_leak
		//gmax_ch_leak = 8.470825e-05 	//gleak
		//e_ch_leak = -60

	//dend {
		//Ra = 100 // does not matter for 1 compartment
		//nseg = 1
		//cm = 1

		// LEAK CHANNEL
		//insert pas
		//e_pas = -67
		//g_pas = 0.001 //0.001 is default

		// Ih for SAG 
		//insert hd 
		//gbar_hd = 0.0001				//mho per cm2 //default value in mod file


		// Fast Na+ for Spiking 	//gNasoma
		//insert ch_Navngf
		//gmax_ch_Navngf=3.7860265
		//ena = 55


		// Fast K+  	//kdrf 
		//insert ch_Kdrfastngf
		//gmax_ch_Kdrfastngf=0.15514516
		//ek = -90
	}

	}






endtemplate ngfcell