begintemplate ngfcell
public soma


create soma


proc init() {
	soma {
		Ra = 100 //14
		nseg = 1
		cm = 2.5942526753849107 //1.3317379634003228 //1.1376725643485543 //0.6610354833691532

		insert ch_Navngf
		gmax_ch_Navngf=3.7860265 		//gNasoma
		ena = 90 //55 
		
		insert ch_Kdrfastngf
		gmax_ch_Kdrfastngf=0.15514516 	//kdrf 

		ek = -90

		insert ch_leak
		gmax_ch_leak = 0.00028363025814608827 //gleak
		e_ch_leak = -73.60910610857559 // -54.2016041361413 //-54.57698789188302 //-59.966637809433735

		insert hd 
		gbar_hd = 0.0006777105190265256 //0.00012968106020774835 //0.000766136872786848 //0.0002600605437159446				//mho per cm2 //default value in mod file

		insert ch_KvAngf 				// Proximal A-type potassium 
		gmax_ch_KvAngf = 0.00015 		// 5.2203905e-06 //gKvA
		
		insert ch_CavN  				// HAV-N- Ca channel //  T-type calcium
		gmax_ch_CavN = 0.0008 			//0.00058169587 //gCavN 
		
		insert ch_CavL 					//  L-type calcium
		gmax_ch_CavL= 0.005 			// 0.056108352 //gCavL

		insert iconc_Ca
		catau_iconc_Ca = 10
		caiinf_iconc_Ca = 5.e-6
		
		insert ch_KCaS 					//  Small potassium channel: calcium gated
		gmax_ch_KCaS= 0.000002 			// 4.5152237e-07 //gKCaS
		
		insert ch_KvCaB 				// Big potassium channel: voltage & ca2+ gated 
		gmax_ch_KvCaB = 0.0000002 		// 1.0235317e-06 //gKvCaB
	
	} 

}




endtemplate ngfcell