begintemplate ngfcell
public init
public soma, dend

create soma, dend

proc topol() {
	connect dend(0), soma(0)
}


proc init() {
	topol()
	soma {
		Ra = 14 //100
		nseg = 1
		cm = 1.8 
		L = 9.5
		diam = 9.5 


		insert ch_Navngf
		gmax_ch_Navngf=3.7860265 //gNasoma //0.10*gna_scale
		ena = 55 

		insert hd
		gbar = 1e-05

		insert ch_Kdrfastngf
		gmax_ch_Kdrfastngf=0.15514516// kdrf 

		insert pas

		insert iconc_Ca
		catau_iconc_Ca = 10
		caiinf_iconc_Ca = 5.e-6

		insert ch_KvAngf
		gmax_ch_KvAngf = 5.2203905e-06 //gKvA

		insert ch_CavN  // HAV-N- Ca channel
		gmax_ch_CavN =  0.00058169587 // gCavN (N-type)

		insert ch_CavL 
		gmax_ch_CavL=0.056108352 //gCavL (L-type)

		insert ch_KCaS
		gmax_ch_KCaS=4.5152237e-07 //gKCaS 

		insert ch_KvCaB
		gmax_ch_KvCaB =1.0235317e-06 //gKvCaB

		ek=-90
		eca=130
	}

	dend {
		Ra = 14 //100 
		nseg = 1
		cm = 1.5 //1
		diam = 7 // from PV cell
		L = 44 // from PV cell 

		// LEAK CHANNEL
		insert pas
		e_pas = -67
		g_pas = 0.001 //0.001 is default

		//Ih for SAG 
		//insert hd 
		//gbar_hd = 0.0001				//mho per cm2 //default value in mod file


		// Fast Na+ for Spiking 	//gNasoma
		insert ch_Navngf
		gmax_ch_Navngf=3.7860265
		ena = 55


		// Fast K+  	//kdrf 
		insert ch_Kdrfastngf
		gmax_ch_Kdrfastngf=0.15514516
		ek = -90
	}

}




endtemplate ngfcell






